PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Official Video Game Questionnaire (3.0)
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Routines
  Routine trial
    TextComponent Instructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Video Game Questionnaire

        Please respond with the best answer for each of the following questions.
        To select an answer, press the number shown before the answer choice.

        Press any key to continue.
    KeyboardComponent Instructions_1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Q1
    TextComponent Q1_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How much video game experience do you have?

        1. A great deal    2. A lot    3.  A moderate amount    4. A little    5. None at all
    KeyboardComponent Q1_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine Q2
    TextComponent Q2_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How good do you feel you are at playing video games?

        1. An expert    2. Very good    3. Moderately good    4. Not very skilled    5. No skill
    KeyboardComponent Q2_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine Q3
    TextComponent Q3_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Currently, how often (approximately) do you play video games that involve navigating,
        walking or driving in pre-existing environments in hours per week?
        (e.g. Halo, Call of Duty, World of Warcraft)

        1. Seldom play any video games    2. Play video games that do NOT involve navigation,
        walking or driving    3. Less than 2 hours    4. 2-4 hours    5. 5+ hours
    KeyboardComponent Q3_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine Q4
    TextComponent Q4_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        If not currently, have you played video games involving navigating,
        walking or driving in pre-existing environments in the last 5 years?

        1. Yes     2. No
    KeyboardComponent Q4_2
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine Q5
    TextComponent Q5_1
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = If Yes, how many hours (approximately) per week? If you answered No, write 'N/A'. 
      wrapWidth = 3
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    TextboxComponent Q5_2
      bold = False
      editable = True
      letterHeight = 0.04
      padding = None
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Type here: 
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    TextComponent Q5_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to continue once you are done.
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    MouseComponent Q5_mouse
      clickable = Q5_text
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Q6
    TextComponent Q6_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Currently, how often (approximately) do you play video games that involve navigating,
        walking or driving in self-created environments in hours per week?
        (e.g. Minecraft, Animal Crossing, Sims)

        1. Seldom play any video games    2. Play video games that do NOT involve navigation,
        walking or driving    3. Less than 2 hours    4. 2-4 hours    5. 5+ hours
    KeyboardComponent Q6_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine Q7
    TextComponent Q9_1
      letterHeight = 0.04
      pos = (0, 0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How many years have you/did you consistently play video games (lifetime) that
        involve learning the layout of (either self-created or pre-existing) environments?
    TextboxComponent Q9_2
      bold = False
      editable = True
      letterHeight = 0.04
      padding = None
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Type here: 
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    TextComponent Q9_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to continue once you are done.
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    MouseComponent Q9_mouse
      clickable = Q9_text
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Q8
    TextComponent Q7_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        If not currently, have you played video games involving navigating,
        walking or driving in self-created environments in the last 5 years?

        1. Yes     2. No
    KeyboardComponent Q7_2
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine Q9
    TextComponent Q8_1_1
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        If Yes, how many hours (approximately) per week? If you
        answered No, write 'N/A'.
    TextboxComponent Q8_2_1
      bold = False
      editable = True
      letterHeight = 0.04
      padding = None
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = Type here: 
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    TextComponent Q8_text_1
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to continue once you are done.
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    MouseComponent Q8_mouse_1
      clickable = Q8_text
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine Q10
    TextComponent Thank_you
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Thank you!

        Press any key to exit.
    KeyboardComponent thank_you
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Q11
    TextComponent Q8_1
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = If Yes, how many hours (approximately) per week? If you answered No, write 'N/A'.
      wrapWidth = 3
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    TextboxComponent Q8_2
      bold = False
      editable = True
      letterHeight = 0.04
      padding = None
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Type here: 
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    TextComponent Q8_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to continue once you are done.
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    MouseComponent Q8_mouse
      clickable = Q8_text
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine Q1
  Routine Q2
  Routine Q3
  Routine Q4
  Routine Q5
  Routine Q6
  Routine Q8
  Routine Q11
  Routine Q7
  Routine Q10
