PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Video Game Questionnaire (2.0)
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Routines
  Routine trial
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Video Game Questionnaire

        Please respond with the best answer for each of the following questions.
        To select an answer, press the number shown before the answer choice.

        Press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Q1
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How much video game experience do you have?

        1. A great deal    2. A lot    3.  A moderate amount    4. A little    5. None at all
    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q2
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How good do you feel you are at playing video games?

        1. An expert    2. Very good    3. Moderately good    4. Not very skilled    5. No skill
    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q3
    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Currently, how often (approximately) do you play video games that involve navigating,
        walking or driving in pre-existing environments in hours per week?
        (e.g. Halo, Call of Duty, World of Warcraft)

        1. Seldom play any video games    2. Play video games that do NOT involve navigation,
        walking or driving    3. Less than 2 hours    4. 2-4 hours    5. 5+ hours
    KeyboardComponent key_resp_4
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q4
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        If not currently, have you played video games involving navigating,
        walking or driving in pre-existing environments in the last 5 years?

        1. Yes     2. No
    KeyboardComponent key_resp_5
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q5
    TextComponent text_6
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        If Yes, how many hours (approximately) per week? If you answered No, write 'N/A'.

        Press 'z' to continue once you are done.
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.04
      padding = None
      startVal [time (s)] = 0.0
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      text:
        ______________
    KeyboardComponent key_resp_7
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Q6
    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Currently, how often (approximately) do you play video games that involve navigating,
        walking or driving in self-created environments in hours per week?
        (e.g. Minecraft, Animal Crossing, Sims)

        1. Seldom play any video games    2. Play video games that do NOT involve navigation,
        walking or driving    3. Less than 2 hours    4. 2-4 hours    5. 5+ hours
    KeyboardComponent key_resp_6
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q7
    TextComponent text_10
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        How many years have you/did you consistently play video games (lifetime) that
        involve learning the layout of (either self-created or pre-existing) environments?

        1. 0    2. Less than 2 years    3. 2-4 years    4. 4-6 years    5. 6-8 years    6. 8-10    7. 10+
    KeyboardComponent key_resp_10
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q8
    TextComponent text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        If not currently, have you played video games involving navigating,
        walking or driving in self-created environments in the last 5 years?

        1. Yes     2. No
    KeyboardComponent key_resp_9
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q9
    TextComponent text_9
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        If Yes, how many hours (approximately) per week? ________

        1. Less than 2 hours     2. 2-4 hours     3. 4-6 hours     4. 6-8 hours
        5. 8+ hours     6. I previously answered No
    KeyboardComponent key_resp_8
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Q10
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Thank you!

        Press any key to exit.
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine trial
  Routine Q1
  Routine Q2
  Routine Q3
  Routine Q4
  Routine Q5
  Routine Q6
  Routine Q8
  Routine Q9
  Routine Q7
  Routine Q10
